#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma IgorVersion = 9
#pragma ModuleName = ATH_MAXPEEM
#pragma version = 1.01

// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //

// This module is solely used at the MAXPEEM beamline @ MAX IV synchrotron facility.
// Set the /raw directory here as MAXPEEM_USER_ROOT_FOLDER

/// @module ATH_Beamtime
/// @brief Module ATH_Beamtime.
/// @details
/// This module belongs to the ATH Igor Pro toolkit and contains procedures
/// related to ATH Beamtime functionality.

/// @function SetOrResetBeamtimeRootFolder
/// @brief Select or clear the beamtime root folder used by file-loading helpers.
/// @returns The selected beamtime root path, or an empty string after reset or cancellation.
static Function/S SetOrResetBeamtimeRootFolder()
	// Helper function for functions in ATH_LoadFilesDuringBeamtime.ipf.
	// Set or reset the Igor Path MAXPEEM_USER_ROOT_FOLDER
	
	PathInfo MAXPEEM_USER_ROOT_FOLDER 
	if(V_flag) // path exists
		KillPath/Z MAXPEEM_USER_ROOT_FOLDER 
	endif
	
	GetFileFolderInfo/Z=2/Q/D //Select folder dialog
	
	if(!(V_flag == -1))
		NewPath/Q/O MAXPEEM_USER_ROOT_FOLDER , S_path
	endif
	return S_path
End

/// @function LoadNewestFileInRaw
/// @brief Load newest file in raw.
/// @details
/// Load the last file found in the directory tree with root at pathName. Return UNC.
/// @param extension File-name extension.
/// @returns Zero after completing the operation.
static Function LoadNewestFileInRaw(string extension)
	 // variable timerRefNum = StartMSTimer
	/// Load the last file found in the directory tree with root at pathName
	string latestfile = ""
	variable latestctime = 0
	string filepathStr = GetNewestCreatedFileInPathTree("MAXPEEM_USER_ROOT_FOLDER", extension, latestfile, latestctime, 1, 0)
	// variable microSeconds = StopMSTimer(timerRefNum)
	/// print "Time elapsed: ", microSeconds/1e6, " sec"
	 // Return UNC
	ATH_HDF5#LoadTVIPSH5Data(ReplaceString("\\", ParseFilePath(5,filepathStr,"\\",0,0), "\\\\")) // Dealing withg UNC names
	return 0
End

/// @function LoadFileFromRaw
/// @brief Load file from raw.
/// @param scanID Beamline scan identifier.
/// @returns Zero after completing the operation.
static Function LoadFileFromRaw(variable scanID)
	// -- Just call the HDF5S Loader
	ATH_HDF5#LoadTVIPSH5DataNetwork(scanID)
	return 0
End

/// @function GetNewestCreatedFileInPathTree
/// @brief Find the newest matching file in a folder tree.
/// @param pathName Name of an Igor symbolic path.
/// @param extension File-name extension filter.
/// @param latestfile Input/output path of the newest file found so far.
/// @param latestctime Input/output creation-time value for the newest item.
/// @param recurse If nonzero, recurse into subfolders.
/// @param level Current recursion depth.
/// @returns The full path of the newest matching file.
static Function/S GetNewestCreatedFileInPathTree(string pathName, 
		   string extension, string &latestfile, variable &latestctime, 
		   variable recurse, variable level)
	//  ATH_GetNewestCreatedFiSleInPathTree is a modified Wavemetrics code of
	//	PrintFoldersAndFiles(pathName, extension, recurse, level)
	//	It recursively finds all files in a folder and subfolders looking for 
	//  the creation date of each file, catching the newest one.
	//	pathName is the name of an Igor symbolic path that you created
	//	using NewPath or the Misc->New Path menu item.
	//	extension is a file name extension like ".txt" or "????" for all files.
	//	recurse is 1 to recurse or 0 to list just the top-level folder.
	//	level is the recursion level - pass 0 when calling ATH_GetNewestCreatedFileInPathTree.
	//  latestfile and latestctime are called by reference as the recursive function call would 
	//  reset pass-by-value arguments. We could alternatively use SVAR and NVAR.
	///
	/// DO NOT CALL THE FUNCTION DIRECTLY.
	/// 
	
	PathInfo $pathName
	string path = S_path	
	if(!V_flag) // If path not defined
		print S_path +" is not set!"
		path = SetOrResetBeamtimeRootFolder()
	endif
	
	// Reset or make the string variable
	variable folderIndex, fileIndex

	// Add files
	fileIndex = 0
	string fileNames = IndexedFile($pathName, -1, extension)
	do
		string fileName
		filename = StringFromList(fileIndex, fileNames)
		if (strlen(fileName) == 0)
			break
		endif
		#if IgorVersion() >= 10
			GetFileFolderInfo/OMIT=31/P=$pathName/Z/Q fileName // /OMIT only in IP10
		#else
			GetFileFolderInfo/P=$pathName/Z/Q fileName
		#endif
		
		if(V_creationDate > latestctime)
			latestfile = (path + fileName)
			latestctime = V_creationDate
		endif
	
		fileIndex += 1
	while(1)
	
	if (recurse)		// Do we want to go into subfolder?
		folderIndex = 0
		do
			path = IndexedDir($pathName, folderIndex, 1)
			if (strlen(path) == 0)
				break	// No more folders
			endif

			string subFolderPathName = "__tempPrintFoldersPath__" + num2istr(level+1)
			
			// Now we get the path to the new parent folder
			string subFolderPath
			subFolderPath = path
			
			NewPath/Q/O $subFolderPathName, subFolderPath
			GetNewestCreatedFileInPathTree(subFolderPathName, extension, latestfile, latestctime, recurse, level+1)
			KillPath/Z $subFolderPathName
			
			folderIndex += 1
		while(1)
	endif

	return latestfile
End

/// @function LoadNewestFolderInPathTreeAndDisplay
/// @brief Load newest folder in path tree and display.
/// @details
/// Load the last file found in the directory tree with root at pathName will pop to set pathName. The path
/// name is saved as pATH_LoadLastFileIgorPath.
/// @returns Zero after completing the operation.
static Function LoadNewestFolderInPathTreeAndDisplay()
	/// Load the last file found in the directory tree with root at pathName
	/// If you haven't set the Igor path (NewPath ... ) a folder selection window 
	/// will pop to set pathName. The path name is saved as pATH_LoadLastFileIgorPath

	string latestfolder = ""
	variable latestctime = 0
	string folderPathStr = GetNewestCreatedFolderInPathTree("MAXPEEM_USER_ROOT_FOLDER", latestfolder, latestctime)
	WAVE wRef = ATH_Uview#WAVELoadDATFilesFromFolder(folderPathStr, "*", autoscale = 1)
	ATH_Display#NewImg(wRef)
	print "Folder loaded: ", folderPathStr	
	return 0
End

/// @function GetNewestCreatedFolderInPathTree
/// @brief Find the newest folder in a folder tree.
/// @param pathName Name of an Igor symbolic path.
/// @param latestfolder Input/output path of the newest folder found so far.
/// @param latestctime Input/output creation-time value for the newest item.
/// @returns The full path of the newest folder.
static Function/S GetNewestCreatedFolderInPathTree(string pathName, string &latestfolder, variable &latestctime)
	//  ATH_GetNewestCreatedFileInPathTree is a modified Wavemetrics code of
	//	PrintFoldersAndFiles(pathName, extension, recurse, level)
	//	It recursively searches for the newest folder in a folder tree.
	//	pathName is the name of an Igor symbolic path that you created
	//	using NewPath or the Misc->New Path menu item.
	///
	/// DO NOT CALL THE FUNCTION DIRECTLY.
	/// 
	PathInfo $pathName
	string path = S_path	
	if(!V_flag) // If path not defined
		print "MAXPEEM_USER_ROOT_FOLDER is not set!"
		path = SetOrResetBeamtimeRootFolder()
	endif
	
	// Reset or make the string variable
	variable folderIndex
	
	string allsubFolders = IndexedDir($pathName, -1, 1)
	folderIndex = 0
	do
		path = StringFromList(folderIndex, allsubFolders) //IndexedDir($pathName, folderIndex, 1)
		if (strlen(path) == 0)
			break	// No more folders
		endif
		
		string subFolderPathName = "tempATH_SetFoldersPath_"

		// Now we get the path to the new parent folder
		string subFolderPath
		subFolderPath = path

		#if IgorVersion() >= 10
			GetFileFolderInfo/OMIT=31/Z/Q path // /OMIT only in IP10
		#else
			GetFileFolderInfo/Z/Q path
		#endif
			
		if(V_creationDate > latestctime)
			latestfolder = path
			latestctime = V_creationDate
		endif
		
		NewPath/Q/O $subFolderPathName, subFolderPath
		GetNewestCreatedFolderInPathTree(subFolderPathName, latestfolder, latestctime)
		KillPath/Z $subFolderPathName

		folderIndex += 1
	while(1)
	return latestfolder
End

/// ------------------------------------------------------------------------------------------- ///
/// -------------- Python versions of the commands. Writtten before IP10 ---------------------- ///

/// @function LoadNewestFileInPathTreeAndDisplayPython
/// @brief Load newest file in path tree and display python.
/// @details
/// Load the last file found in the directory tree with root set at pathName will pop to set pathName. The
/// path name is saved as pATH_LoadLastFileIgorPath.
/// @param ext File-name extension.
/// @returns One when the requested condition or operation succeeds; otherwise zero.
static Function LoadNewestFileInPathTreeAndDisplayPython(string ext)
	/// Load the last file found in the directory tree with root set at pathName
	/// If you haven't set the Igor path (NewPath ... ) a folder selection window 
	/// will pop to set pathName. The path name is saved as pATH_LoadLastFileIgorPath.

	string filepathStr = GetLastSavedFileInFolderTreePython("MAXPEEM_USER_ROOT_FOLDER", ext) // Change path!
	if(!strlen(filepathStr))
		return 1
	endif
	#ifdef MACINTOSH
		filepathStr = ParseFilePath(10, filepathStr, "*", 0, 0)
	#endif	
	WAVE wRef = ATH_Uview#WAVELoadSingleDATFile(filepathStr, "")
	ATH_Display#NewImg(wRef)
	print "File loaded: ", filepathStr
	return 0
End

/// @function GetLastSavedFileInFolderTreePython
/// @brief Find the most recently saved matching file using the Python helper.
/// @param pathName Name of an Igor symbolic path.
/// @param ext File-name extension filter.
/// @returns The full path of the most recently saved matching file.
static Function/S GetLastSavedFileInFolderTreePython(string pathName, string ext)
	// valid shell script
	// do shell script "python3 -c \"from pathlib import Path;from os.path import getmtime;
	// print(max(list(Path('/Users/evangelosgolias/Desktop/MAXPEEM March 2023').rglob('*.dat')),key=getmtime))\""
	// For WINDOWS python interpreter and runtime is needed.
	
	//variable timerRefNum = StartMSTimer

	PathInfo $pathName
	string path = S_path	
	if(!V_flag) // If path not defined, set it and call the function again
		print "MAXPEEM_USER_ROOT_FOLDER is not set!"
		path = SetOrResetBeamtimeRootFolder()
	endif
	
	#ifdef WINDOWS
		path = RemoveEnding(ParseFilePath(5, path, "\\", 0, 0))// Remove last backslash because it is interpreted as escape character \'
	#else // MACINTOSH
		path = ParseFilePath(5, path, "/", 0, 0)
	#endif	
	string 	unixCmd, igorCmd, unixCmdBase
	
	#ifdef WINDOWS
		unixCmdBase = "python -c \"from pathlib import Path;from os.path import getmtime;print(max(list(Path('%s').rglob('*%s')),key=getmtime))\""
		sprintf unixCmd, unixCmdBase, path, ext
		sprintf igorCmd, "cmd.exe /C \"%s\"", unixCmd	
	#else // MACINTOSH
		unixCmdBase = "python3 -c \\\"from pathlib import Path;from os.path import getmtime;print(max(list(Path('%s').rglob('*%s')),key=getmtime))\\\""
		sprintf unixCmd, unixCmdBase, path, ext
		sprintf igorCmd, "do shell script \"%s\" ", unixCmd
	#endif	
	ExecuteScriptText/Z/B/UNQ igorCmd
	//variable microSeconds = StopMSTimer(timerRefNum)
	//print "Time elapsed: ", microSeconds/1e6, " sec"
	return S_value
End




//static Function LoadNewestTwoFilesInPathTreeAndDisplayPython(string ext)
//	/// Load the last two saved files in the tree with pathName as root folder
//	/// If you haven't set the Igor path (NewPath ... ) a folder selection window 
//	/// will pop do so. The path name is saved as pATH_LoadLastFileIgorPath.
//
//	string filepathsStr = GetLastTwoSavedFileInFolderTreePython("MAXPEEM_USER_ROOT_FOLDER", ext) // Change path!
//	string filepath1Str = StringFromList(0, filepathsStr)
//	string filepath2Str = StringFromList(1, filepathsStr)	
//	#ifdef MACINTOSH
//		filepath1Str = ParseFilePath(10, filepath1Str, "*", 0, 0)
//		filepath2Str = ParseFilePath(10, filepath2Str, "*", 0, 0)		
//	#endif
//	DFREF saveDF = GetDataFolderDFR()
//	SetDataFolder NewFreeDataFolder()
//	WAVE w1Ref = ATH_Uview#WAVELoadSingleDATFile(filepath1Str, "pyWave0", autoscale = 1)
//	WAVE w2Ref = ATH_Uview#WAVELoadSingleDATFile(filepath2Str, "pyWave1", autoscale = 1)
//	Imagetransform stackImages $"pyWave0"
//	WAVE M_Stack
//	string w3dStr = CreateDataObjectName(saveDF, "autoLoadL2F", 1, 0, 5)
//	MoveWave M_stack, saveDF:$w3dStr
//	SetDataFolder saveDF
//	ATH_Display#NewImg($w3dStr)
//	Note $w3dStr, ("file1: " + filepath1Str + "\nfile2: " + filepath2Str)
//	print "Files loaded: \n1.", filepath1Str, "\n2.", filepath2Str, "\n", "◊ Stacked in: ", w3dStr
//	return 0
//End
//
//static Function/S GetLastTwoSavedFileInFolderTreePython(string pathName, string ext)
////	unixCmdBase = "python3 -c \"from pathlib import Path;from os.path import getmtime;"\
////			  + "listFiles = sorted(Path('%s').rglob('*%s'), "\
////			  + "key = getmtime);print(listFiles[-2], end='');print(';');print(listFiles[-1], end='');print(';')\""	
////
////		
//	
//	//variable timerRefNum = StartMSTimer
//
//	PathInfo $pathName
//	string path = S_path	
//	if(!V_flag) // If path not defined, set it and call the function again
//		print "MAXPEEM_USER_ROOT_FOLDER is not set!"
//		path = SetOrResetBeamtimeRootFolder()
//	endif
//	
//	#ifdef WINDOWS
//		path = RemoveEnding(ParseFilePath(5, path, "\\", 0, 0))// Remove last backslash because it is interpreted as escape character \'
//	#else // MACINTOSH
//		path = ParseFilePath(5, path, "/", 0, 0)
//	#endif	
//	string 	unixCmd, igorCmd, unixCmdBase
//	
//	#ifdef WINDOWS
//		unixCmdBase = "python -c \"from pathlib import Path;from os.path import getmtime;"\
//					  + "listFiles = sorted(Path('%s').rglob('*%s'), "\
//					  + "key = getmtime);print(listFiles[-2], end='');print(';',end='');print(listFiles[-1], end='');print(';',end='')\""		
//		sprintf unixCmd, unixCmdBase, path, ext	
//		sprintf igorCmd, "cmd.exe /C \"%s\"", unixCmd
//	#else // MACINTOSH, python3 is for my Mac! You could use python instead
//		unixCmdBase = "python3 -c \\\"from pathlib import Path;from os.path import getmtime;"\
//					  + "listFiles = sorted(Path('%s').rglob('*%s'), "\
//					  + "key = getmtime);print(listFiles[-2], end='');print(';',end='');print(listFiles[-1], end='');print(';',end='')\\\""	
//		sprintf unixCmd, unixCmdBase, path, ext	
//		sprintf igorCmd, "do shell script \"%s\" ", unixCmd
//	#endif	
//	
//	ExecuteScriptText/Z/B/UNQ igorCmd
//	//variable microSeconds = StopMSTimer(timerRefNum)
//	//print "Time elapsed: ", microSeconds/1e6, " sec"
//	return S_value
//End
