#pragma TextEncoding = "UTF-8"
#pragma rtGlobals    = 3		
#pragma IgorVersion  = 9
#pragma ModuleName = ATH_LineProfile
#pragma DefaultTab	= {3,20,4}			// Set default tab width in Igor Pro 9 and late
#pragma version = 1.1

// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //


// 21.03.2026: Added scaling using cursor positions. Scaling is performed
// using only a parameter that scales (multiplies) the x-axis wave from the
// ImageLineProfile operation, W_LineProfileDisplacement.
// 
// TODO
// You can update the code to deal with cases with different x, y wavescales
// You can use the cursor values to find the distance between E, F. You can then
// check how many points you have in x, y and extract two scale factors. But you have
// to always track the points in x, y axis to get the correct scaling.

/// @module ATH_LineProfile
/// @brief Module ATH_LineProfile.
/// @details
/// This module belongs to the ATH Igor Pro toolkit and contains procedures
/// related to ATH LineProfile functionality.

/// @function MainMenu
/// @brief Launch the line-profile tool for the active image.
/// @details
/// When autoscaled then SETAXISCMD is SetAxis/A.
/// @returns Igor status code: zero on completion; nonzero reports cancellation, invalid input, or failure.
static Function MainMenu()
	
	string winNameStr = WinName(0, 1, 1)
	string imgNameTopGraphStr = StringFromList(0, ImageNameList(winNameStr, ";"),";")
	if(!strlen(imgNameTopGraphStr))
		print "No image in top graph."
		return -1
	endif
	WAVE imgWaveRef = ImageNameToWaveRef("", imgNameTopGraphStr) // full path of wave
	string LinkedPlotStr = GetUserData(winNameStr, "", "ATH_LinkedWinImageLPP")
	if(strlen(LinkedPlotStr))
		DoWindow/F $LinkedPlotStr
		return 0
	endif
	DFREF dfr = InitialiseFolder(winNameStr)
	variable nrows = DimSize(imgWaveRef,0)
	variable ncols = DimSize(imgWaveRef,1)
	string axisX, axisY
	[axisX, axisY] = ATH_Graph#GetAxes(grfName=winNameStr)
	string cmdStr, axisStr, dumpStr, val1Str, val2Str
	string axisTopRangeStr = StringByKey("SETAXISCMD", AxisInfo("", axisX))
	SplitString/E="\s*([A-Z,a-z,^a-zA-Z0-9]*)\s*([A-Z,a-z]*)\s*([-]?[0-9]*[.]?[0-9]+)\s*(,)\s*([-]?[0-9]*[.]?[0-9]+)\s*"\
	axisTopRangeStr, cmdStr, axisStr, val1Str, dumpStr, val2Str
	variable midOfImageX = 0.5 * (str2num(val1Str) + str2num(val2Str))
	string axisLeftRangeStr = StringByKey("SETAXISCMD", AxisInfo("", axisY))
	SplitString/E="\s*([A-Z,a-z,^a-zA-Z0-9]*)\s*([A-Z,a-z]*)\s*([-]?[0-9]*[.]?[0-9]+)\s*(,)\s*([-]?[0-9]*[.]?[0-9]+)\s*"\
	axisLeftRangeStr, cmdStr, axisStr, val1Str, dumpStr, val2Str
	variable midOfImageY = 0.5 * (str2num(val1Str) + str2num(val2Str))
	// When autoscaled then SETAXISCMD is SetAxis/A
	if(numtype(midOfImageX)) // if NaN
		Cursor/W=$winNameStr/I/C=(65535,0,0)/S=1/P/N=1 E $imgNameTopGraphStr nrows*0.75, ncols*0.25
		Cursor/W=$winNameStr/I/C=(65535,0,0)/S=1/P/N=1 F $imgNameTopGraphStr nrows*0.25, ncols*0.75
	else
		Cursor/W=$winNameStr/I/C=(65535,0,0)/S=1/N=1 E $imgNameTopGraphStr midOfImageX*1.05, midOfImageY*0.95
		Cursor/W=$winNameStr/I/C=(65535,0,0)/S=1/N=1 F $imgNameTopGraphStr midOfImageX*0.95, midOfImageY*1.05
	endif
	InitialiseGraph(dfr)
	SetWindow $winNameStr, hook(MyLineProfileHook) = ATH_LineProfile#CursorsHookFunction // Set the hook
	SetWindow $winNameStr userdata(ATH_LinkedWinImageLPP) = "ATH_LineProfilePlot_" + winNameStr // Name of the plot we will make, used to communicate the
	SetWindow $winNameStr userdata(ATH_ShowSavedGraphsWindow) = "ATH_LineProf_" + winNameStr //  Same as gATH_WindowNameStr, see InitialiseFolder
	SetWindow $winNameStr userdata(ATH_LineProfRootDF) = GetDataFolder(1, dfr)
	return 0
End

/// @function InitialiseFolder
/// @brief Create and initialize state for a graph's line-profile tool.
/// @param winNameStr Name of the target graph or panel window.
/// @returns Reference to the resulting data folder.
static Function/DF InitialiseFolder(string winNameStr)
	/// All initialisation happens here. Folders, waves and local/global variables
	/// needed are created here. Use the 3D wave in top window.

	string imgNameTopGraphStr = StringFromList(0, ImageNameList(winNameStr, ";"),";")
	WAVE imgWaveRef = ImageNameToWaveRef("", imgNameTopGraphStr) // full path of wave

	string msg // Error reporting
	if(!strlen(imgNameTopGraphStr)) // we do not have an image in top graph
		Abort "No image in top graph. Start the line profile with an image or image stack in top window."
	endif
	
	if(WaveDims(imgWaveRef) != 2 && WaveDims(imgWaveRef) != 3)
		sprintf msg, "Z-profile works with images or image stacks.  Wave %s is in top window", imgNameTopGraphStr
		Abort msg
	endif
	
	if(stringmatch(AxisList(winNameStr),"*bottom*")) // Check if you have a NewImage left;top axes
		sprintf msg, "Reopen as Newimage %s", imgNameTopGraphStr
		KillWindow $winNameStr
		NewImage/K=1/N=$winNameStr imgWaveRef
		ModifyGraph/W=$winNameStr width={Plan,1,top,left}
	endif

	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:LineProfiles:" + winNameStr) // Root folder here
	DFREF dfr0 = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:LineProfiles:DefaultSettings:") // Settings here

	variable nrows = DimSize(imgWaveRef,0)
	variable ncols = DimSize(imgWaveRef,1)

	string/G dfr:gATH_imgNameTopWindowStr = imgNameTopGraphStr
	string/G dfr:gATH_WindowNameStr = winNameStr
	string/G dfr:gATH_ImagePathname = GetWavesDataFolder(imgWaveRef, 2)
	string/G dfr:gATH_ImageNameStr = NameOfWave(imgWaveRef)
	variable/G dfr:gATH_dx = DimDelta(imgWaveRef,0)
	variable/G dfr:gATH_dy = DimDelta(imgWaveRef,1)
	variable/G dfr:gATH_xOff = DimOffset(imgWaveRef,0)
	variable/G dfr:gATH_yOff = DimOffset(imgWaveRef,1)	
	variable/G dfr:gATH_C1x = round(1.1 * nrows/2)
	variable/G dfr:gATH_C1y = round(0.9 * ncols/2)
	variable/G dfr:gATH_C2x = round(0.9 * nrows/2)
	variable/G dfr:gATH_C2y = round(1.1 * ncols/2)
	variable/G dfr:gATH_profileWidth = 0
	variable/G dfr:gATH_selectedLayer = 0
	variable/G dfr:gATH_scalingFactor = 0
	variable/G dfr:gATH_updateCursorsPositions = 0
	// Switches and indicators
	variable/G dfr:gATH_PlotSwitch = 1
	variable/G dfr:gATH_MarkLinesSwitch = 1
	variable/G dfr:gATH_updateSelectedLayer = 1	
	variable/G dfr:gATH_colorcnt = 0
	// Default settings
	NVAR/Z/SDFR=dfr0 gATH_profileWidth0
	if(!NVAR_Exists(gATH_profileWidth0)) // init only once and do not overwrite
		variable/G dfr0:gATH_C1x0 = round(1.1 * nrows/2)
		variable/G dfr0:gATH_C1y0 = round(0.9 * ncols/2)
		variable/G dfr0:gATH_C2x0 = round(0.9 * nrows/2)
		variable/G dfr0:gATH_C2y0 = round(1.1 * ncols/2)
		variable/G dfr0:gATH_profileWidth0 = 0
	endif
	return dfr
End

/// @function InitialiseGraph
/// @brief Initialize the graph used by the line-profile tool.
/// @details
/// Here we will create the profile plot and graph and plot the profile.
/// @param dfr Reference to the data folder to inspect or modify.
/// @returns Zero after completing the operation.
static Function InitialiseGraph(DFREF dfr)
	/// Here we will create the profile plot and graph and plot the profile
	string plotNameStr = "ATH_LineProf_" + GetDataFolder(0, dfr)
	if (WinType(plotNameStr) == 0) // line profile window is not displayed
		CreatePlot(dfr)
	else
		DoWindow/F $plotNameStr // if it is bring it to the FG
	endif
	return 0
End

/// @function CreatePlot
/// @brief Create plot.
/// @details
/// ModifyGraph
/// mode=7,useNegRGB=1,usePlusRGB=1,hbFill=5,negRGB=(65535,32768,32768),plusRGB=(32768,40777,65535).
/// @param dfr Reference to the data folder to inspect or modify.
/// @returns Zero after completing the operation.
static Function CreatePlot(DFREF dfr)
	string rootFolderStr = GetDataFolder(1, dfr)
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(rootFolderStr)
	SVAR/SDFR=dfr gATH_WindowNameStr
	NVAR profileWidth = dfr:gATH_profileWidth
	string profilePlotStr = "ATH_LineProfilePlot_" + gATH_WindowNameStr
	Make/O/N=0  dfr:W_LineProfileDisplacement, dfr:W_ImageLineProfile // Make a dummy wave to display z
	Display/W=(0,0,515,300)/K=1/N=$profilePlotStr dfr:W_ImageLineProfile vs dfr:W_LineProfileDisplacement as "Line profile " + gATH_WindowNameStr
	AutoPositionWindow/E/M=0/R=$gATH_WindowNameStr
	ModifyGraph rgb=(1,12815,52428), tick(left)=2, tick(bottom)=2, fSize=14, lsize=1.5
	ModifyGraph/Z cbRGB=(65535,65534,49151)
	//ModifyGraph mode=7,useNegRGB=1,usePlusRGB=1,hbFill=5,negRGB=(65535,32768,32768),plusRGB=(32768,40777,65535) // delay at 4K?
	Label left "Intensity (arb. u.)"
	Label bottom "\$WMTEX$ d_{E \\ \to \\ F} \\ (u.)$/WMTEX$"
	
	SetWindow $profilePlotStr userdata(ATH_LineProfRootDF) = rootFolderStr // pass the dfr to the button controls
	SetWindow $profilePlotStr userdata(ATH_ShowSavedGraphsWindow) = "ATH_LineProf_" + gATH_WindowNameStr 
	SetWindow $profilePlotStr userdata(ATH_LinkedWinImageSource) = gATH_WindowNameStr 
	SetWindow $profilePlotStr, hook(MyLineProfileGraphHook) = ATH_LineProfile#GraphHookFunction // Set the hook
	
	ControlBar/W=$profilePlotStr 70	
	Button SaveProfileButton,pos={18.00,8.00},size={90.00,20.00},title="Save Profile",valueColor=(1,12815,52428)
	Button SaveProfileButton,help={"Save displayed profile"},proc=ATH_LineProfile#SaveProfile
	Button SaveCursorPositions,pos={118,8},size={95,20},title="Save settings",valueColor=(1,12815,52428)
	Button SaveCursorPositions,help={"Save cursor positions and profile wifth as defaults"},proc=ATH_LineProfile#SaveDefaultSettings
	Button RestoreCursorPositions,pos={224,8},size={111,20},valueColor=(1,12815,52428),title="Restore settings"
	Button RestoreCursorPositions,help={"Restore default cursor positions and line width"},proc=ATH_LineProfile#RestoreDefaultSettings
	Button ShowProfileWidth,pos={344,8},size={111,20},title="Show width",fcolor=(0,0,65535)
	Button ShowProfileWidth,help={"Set scale based on cursor positions"},proc=ATH_LineProfile#ShowProfileWidth
	Button ScaleLineProfile,valueColor=(1,12815,52428), pos={460,15},size={50,40},title="Set\nScale"
	Button ScaleLineProfile,fcolor=(65535,0,0),help={"Show width of integrated area while button is pressed"},proc=ATH_LineProfile#SetLineProfileScale	
	CheckBox PlotProfiles,pos={19,40},size={98,17},title="Plot profiles ",fSize=14,value=1,side=1,proc=ATH_LineProfile#CheckboxPlotProfile
	CheckBox MarkLines,pos={127,40},size={86,17},title="Mark lines ",fSize=14,value=1,side=1,proc=ATH_LineProfile#CheckboxMarkLines
	CheckBox ProfileLayer3D,pos={227,40},size={86,17},title="Stack layer ",fSize=14,side=1,value=1,proc=ATH_LineProfile#ProfileLayer3D
	SetVariable setWidth,pos={331,40},size={123,20},title="Sampling", fSize=14,fColor=(65535,0,0),value=profileWidth,limits={0,inf,1}
	SetVariable setWidth, help={"Sampling is 2 * (width + 0.5) points equidistant from the line"},proc=ATH_LineProfile#SetVariableWidth
	return 0
End

/// @function ClearLineMarkings
/// @brief Clear line markings.
/// @param winNameStr Win name str.
/// @returns Zero after completing the operation.
static Function ClearLineMarkings(string winNameStr)
	SetDrawLayer/W=$winNameStr UserFront
	DrawAction/W=$winNameStr delete
	SetDrawLayer/W=$winNameStr ProgFront
	return 0
End

/// @function DrawLineUserFront
/// @brief Draw line user front.
/// @param winNameStr Win name str.
/// @param x0 First x coordinate or range bound.
/// @param y0 First y coordinate or range bound.
/// @param x1 Second x coordinate or range bound.
/// @param y1 Second y coordinate or range bound.
/// @param red Red-channel value or wave.
/// @param green Green-channel value or wave.
/// @param blue Blue-channel value or wave.
/// @returns Zero after completing the operation.
static Function DrawLineUserFront(string winNameStr, variable x0, variable y0, variable x1, variable y1, variable red, variable green, variable blue)
	SetDrawLayer/W=$winNameStr UserFront 
	SetDrawEnv/W=$winNameStr linefgc = (red, green, blue), fillpat = 0, linethick = 2, dash= 2, xcoord= top, ycoord= left
	DrawLine/W=$winNameStr x0, y0, x1, y1
	return 0
End

/// @function CursorsHookFunction
/// @brief Handle cursors hook events.
/// @details
/// Window hook function. The line profile is drawn from E to F. To revise. Case 17 is not recommended to use
/// for killing windows. See JW's email.
/// @param s Igor action structure describing the control or window event.
/// @returns Igor callback status; nonzero indicates that the event was handled.
static Function CursorsHookFunction(STRUCT WMWinHookStruct &s)
	/// Window hook function
	/// The line profile is drawn from E to F
	variable hookResult = 0
	DFREF currdfr = GetDataFolderDFR()
	DFREF dfr  = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(s.winName, "", "ATH_LineProfRootDF"))
	DFREF dfr0 = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:LineProfiles:DefaultSettings")
	SetDataFolder dfr
	SVAR/Z WindowNameStr = dfr:gATH_WindowNameStr, ImagePathname = dfr:gATH_ImagePathname, ImageNameStr = dfr:gATH_ImageNameStr
	NVAR/Z dx = dfr:gATH_dx, dy = dfr:gATH_dy, xOff = dfr:gATH_xOff, yOff = dfr:gATH_yOff
	NVAR/Z C1x = dfr:gATH_C1x, C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
	NVAR/Z profileWidth = dfr:gATH_profileWidth, selectedLayer = dfr:gATH_selectedLayer, scaleFactor = dfr:gATH_scalingFactor
	NVAR/Z updateSelectedLayer = dfr:gATH_updateSelectedLayer, updateCursorsPositions = dfr:gATH_updateCursorsPositions
	NVAR/Z C1x0 = dfr0:gATH_C1x0, C1y0 = dfr0:gATH_C1y0, C2x0 = dfr0:gATH_C2x0, C2y0 = dfr0:gATH_C2y0
	NVAR/Z profileWidth0 = dfr0:gATH_profileWidth0
	WAVE/Z imgWaveRef = $ImagePathname

	switch(s.eventCode)
		case 0: // Use activation to update the cursors if you request defaults
			if(updateCursorsPositions)
				SetDrawLayer/W=$s.winName ProgFront
			    DrawAction/W=$s.winName delete
	   			SetDrawEnv/W=$s.winName linefgc = (65535,0,0,65535), fillpat = 0, linethick = 1, xcoord = top, ycoord = left
				Cursor/I/C=(65535,0,0,30000)/S=1/N=1 E $ImageNameStr C1x0, C1y0
				Cursor/I/C=(65535,0,0,30000)/S=1/N=1 F $ImageNameStr C2x0, C2y0
				DrawLine/W=$s.winName C1x0, C1y0, C2x0, C2y0
				Make/O/FREE/N=2 xTrace={C1x0, C2x0}, yTrace = {C1y0, C2y0}
				ImageLineProfile/P=(selectedLayer) srcWave=imgWaveRef, xWave=xTrace, yWave=yTrace, width = 2*profileWidth
				if(scaleFactor)
					WAVE W_LineProfileDisplacement
					W_LineProfileDisplacement*=scaleFactor
				endif					
				updateCursorsPositions = 0
			endif
			break
		// To revise. Case 17 is not recommended to use for killing windows. See JW's email.
		case 17: // case 2: ATH_LinkedWinImageLPP in not killed when another hook kills s.winName
			KillWindow/Z $(GetUserData(s.winName, "", "ATH_LinkedWinImageLPP"))			
			if(WinType(GetUserData(s.winName, "", "ATH_ShowSavedGraphsWindow")) == 1)
				DoWindow/C/W=$(GetUserData(s.winName, "", "ATH_ShowSavedGraphsWindow")) $UniqueName("LineProf_unlnk_",6,0) // Change name of profile graph
			endif
			KillDataFolder/Z dfr
			hookresult = 0 // Prevent another case 17 somewhere to stop the window from being killed
			break
       	case 5: // mouse up
       		C1x = hcsr(E,s.winName) 
       		C1y = vcsr(E,s.winName)
       		C2x = hcsr(F,s.winName)
       		C2y = vcsr(F,s.winName)
       		hookResult = 1
			break
		case 8: // modifications, either move the slides or the cursors
			// NB: s.cursorName gives "" in the switch but "-" outside for no cursor under cursor or CursorName (A,B,...J)
			if(WaveDims(imgWaveRef) == 3 && DataFolderExists(skATH_W3DImageSliderParentDFR + WindowNameStr) && updateSelectedLayer) // deleted && mouseTrackV < 0
				NVAR/Z glayer = root:Packages:ATH_DataFolder:W3DImageSlider:$(WindowNameStr):gLayer
				selectedLayer = glayer
				Make/O/FREE/N=2 xTrace={C1x, C2x}, yTrace = {C1y, C2y} // profile from E to F
				ImageLineProfile/P=(selectedLayer) srcWave=imgWaveRef, xWave=xTrace, yWave=yTrace, width = 2*profileWidth
				if(scaleFactor)
					WAVE W_LineProfileDisplacement
					W_LineProfileDisplacement*=scaleFactor
				endif					
				//hookResult = 1
			endif	
			break
	    case 7: // cursor moved
			if(!cmpstr(s.cursorName, "E") || !cmpstr(s.cursorName, "F")) // It should work only with E, F you might have other cursors on the image
				SetDrawLayer/W=$s.winName ProgFront
			    DrawAction/W=$s.winName delete			    
	   			SetDrawEnv/W=$s.winName linefgc = (65535,0,0,65535), fillpat = 0, linethick = 1, xcoord = top, ycoord = left
	   			C1x = hcsr(E,s.winName)
				C1y = vcsr(E,s.winName)
				C2x = hcsr(F,s.winName)
				C2y = vcsr(F,s.winName)	   			
	   			DrawLine/W=$s.winName C1x, C1y, C2x, C2y
	   			Make/O/FREE/N=2 xTrace={C1x, C2x}, yTrace = {C1y, C2y}
	   			ImageLineProfile/P=(selectedLayer) srcWave=imgWaveRef, xWave=xTrace, yWave=yTrace, width = 2*profileWidth
				// Scale here the x-axis if needed (custom scaling)    
				if(scaleFactor)
					WAVE W_LineProfileDisplacement
					W_LineProfileDisplacement*=scaleFactor
				endif	  	   			
	   			hookResult = 1
	   			break
			endif
			hookresult = 0
			break
    endswitch	
    SetdataFolder currdfr
    return hookResult       // 0 if nothing done, else 1
End

/// @function GraphHookFunction
/// @brief Handle panel hook events.
/// @details
/// ParentImageWinStr -- winNameStr. Kill the MyLineProfileHook. We need to reset the link between
/// parentImageWinStr (winNameStr) and ATH_LinkedWinImageLPP.
/// @param s Igor action structure describing the control or window event.
/// @returns Igor callback status; nonzero indicates that the event was handled.
static Function GraphHookFunction(STRUCT WMWinHookStruct &s)
	string parentImageWinStr = GetUserData(s.winName, "", "ATH_LinkedWinImageSource")
	switch(s.eventCode)
		case 2: // Kill the window
			// parentImageWinStr -- winNameStr
			// Kill the MyLineProfileHook
			DoWindow $parentImageWinStr
			//if(WinType(GetUserData(parentImageWinStr, "", "ATH_ShowSavedGraphsWindow")) == 1)
			if(V_flag)
				SetWindow $parentImageWinStr, hook(MyLineProfileHook) = $""
				// We need to reset the link between parentImageWinStr (winNameStr) and ATH_LinkedWinImageLPP
				// see ATH_MainMenuLaunchLineProfile() when we test if with strlen(LinkedPlotStr)	
				SetWindow $parentImageWinStr userdata(ATH_LinkedWinImageLPP) = ""
				if(WinType(GetUserData(s.winName, "", "ATH_ShowSavedGraphsWindow")) == 1)
					DoWindow/C/W=$(GetUserData(s.winName, "", "ATH_ShowSavedGraphsWindow")) $UniqueName("LineProf_unlnk_",6,0) // Change name of profile graph
				endif
				Cursor/W=$parentImageWinStr/K E
				Cursor/W=$parentImageWinStr/K F
				SetDrawLayer/W=$parentImageWinStr ProgFront
				DrawAction/W=$parentImageWinStr delete	
			endif
			Execute/P/Q/Z ("KillDataFolder/Z " + GetUserData(s.winName, "","ATH_LineProfRootDF"))
			break
		case 4: // Mouse moved
			if(!(s.eventMod & 2)) // Shift key is not down
				DrawAction/W=$parentImageWinStr/L=ProgFront getgroup = ATH_LineProfileDot
				if(V_flag)
					DrawAction/W=$parentImageWinStr/L=ProgFront delete = V_startPos, V_endPos
				endif
				break
			endif

			DFREF dfr = $GetUserData(s.winName, "", "ATH_LineProfRootDF")
			WAVE/Z/SDFR=dfr W_LineProfileDisplacement
			variable profnpts = numpnts(W_LineProfileDisplacement)
			if(profnpts < 2)
				break
			endif

			// Position along the displayed profile, from E (0) to F (1).
			variable profileX = AxisValFromPixel(s.winName, "bottom", s.mouseLoc.h)
			variable profileStart = W_LineProfileDisplacement[0]
			variable profileRange = W_LineProfileDisplacement[profnpts-1] - profileStart
			if(numtype(profileX) || numtype(profileRange) || profileRange == 0)
				break
			endif
			variable fraction = (profileX - profileStart) / profileRange
			fraction = max(0, min(1, fraction))

			// Interpolate the parent image coordinates between E and F.
			variable C1x = hcsr(E, parentImageWinStr)
			variable C1y = vcsr(E, parentImageWinStr)
			variable C2x = hcsr(F, parentImageWinStr)
			variable C2y = vcsr(F, parentImageWinStr)
			variable x = C1x + fraction * (C2x - C1x)
			variable y = C1y + fraction * (C2y - C1y)
			if(numtype(x) || numtype(y))
				break
			endif

			// Replace only the previous dot.
			SetDrawLayer/W=$parentImageWinStr ProgFront
			DrawAction/W=$parentImageWinStr/L=ProgFront getgroup = ATH_LineProfileDot
			if(V_flag)
				DrawAction/W=$parentImageWinStr/L=ProgFront delete = V_startPos, V_endPos
			endif
			
			// Anchor in image-axis coordinates; draw a fixed-size red dot.
			SetDrawEnv/W=$parentImageWinStr push
			SetDrawEnv/W=$parentImageWinStr gstart, gname = ATH_LineProfileDot
			SetDrawEnv/W=$parentImageWinStr xcoord = top, ycoord = left
			SetDrawEnv/W=$parentImageWinStr origin = x,y
			SetDrawEnv/W=$parentImageWinStr xcoord = abs, ycoord = abs,linefgc = (65535,0,0), fillfgc = (65535,0,0), fillpat = 1, linethick = 0
			DrawOval/W=$parentImageWinStr -4,-4,4,4
			SetDrawEnv/W=$parentImageWinStr gstop
			SetDrawEnv/W=$parentImageWinStr pop
			break
	endswitch
End

/// @function SaveProfile
/// @brief Save profile.
/// @details
/// Dispatches the relevant Igor control event and ignores unsupported event codes.
/// @param B_Struct Igor action structure describing the control or window event.
/// @returns Zero after completing the operation.
static Function SaveProfile(STRUCT WMButtonAction &B_Struct): ButtonControl

	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(B_Struct.win, "", "ATH_LineProfRootDF"))
			string targetGraphWin = GetUserData(B_Struct.win, "", "ATH_ShowSavedGraphsWindow")
			SVAR/Z WindowNameStr = dfr:gATH_WindowNameStr, wavenameStr = dfr:gATH_ImageNameStr, ImagePathname = dfr:gATH_ImagePathname
			Wave/SDFR=dfr W_ImageLineProfile, W_LineProfileDisplacement
			NVAR/Z PlotSwitch = dfr:gATH_PlotSwitch, MarkLinesSwitch = dfr:gATH_MarkLinesSwitch
			NVAR/Z profileWidth = dfr:gATH_profileWidth, selectedLayer = dfr:gATH_selectedLayer
			NVAR/Z C1x = dfr:gATH_C1x, C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
			NVAR/Z colorcnt = dfr:gATH_colorcnt, scalingFactor = dfr:gATH_scalingFactor
			string recreateDrawStr
			DFREF savedfr = GetDataFolderDFR()
			variable postfix = 0, red, green, blue
			string saveWaveBaseNameStr = wavenameStr + "_Lprof"
			string saveWaveNameStr = CreatedataObjectName(savedfr, saveWaveBaseNameStr, 1, 0, 5)
			Duplicate dfr:W_ImageLineProfile, savedfr:$saveWaveNameStr
			variable profnpts = DimSize(W_LineProfileDisplacement,0)
			variable xRange = W_LineProfileDisplacement[profnpts-1] - W_LineProfileDisplacement[0]
			SetScale/I x, 0, xRange, savedfr:$saveWaveNameStr
			if(PlotSwitch)
				if(WinType(targetGraphWin) == 1)
					AppendToGraph/W=$targetGraphWin savedfr:$saveWaveNameStr
					[red, green, blue] = ATH_Graph#GetColor(colorcnt)
					Modifygraph/W=$targetGraphWin rgb($saveWaveNameStr) = (red, green, blue)
					colorcnt += 1 // i++ does not work with globals?
				else
					Display/N=$targetGraphWin savedfr:$saveWaveNameStr // Do not kill the graph windows, user might want to save the profiles
					[red, green, blue] = ATH_Graph#GetColor(colorcnt)
					Modifygraph/W=$targetGraphWin rgb($saveWaveNameStr) = (red, green, blue)
					AutopositionWindow/R=$B_Struct.win $targetGraphWin
					DoWindow/F $targetGraphWin
					colorcnt += 1
				endif
			endif

			if(MarkLinesSwitch)
				if(!PlotSwitch)
					[red, green, blue] = ATH_Graph#GetColor(colorcnt)
					colorcnt += 1
				endif
				DrawLineUserFront(WindowNameStr,C1x, C1y, C2x, C2y, red, green, blue) // Draw on UserFront and return to ProgFront
			endif
			sprintf recreateDrawStr, "wavename:%s\npath:%s\nDrawEnv:SetDrawEnv linefgc = (%d, %d, %d), fillpat = 0, linethick = 1, dash= 2, xcoord= top, ycoord= left;" + \
			"DrawCmd:DrawLine %g, %g, %g, %g;ProfileCmd:Make/O/N=2 xTrace={%g, %g}, yTrace = {%g, %g}\nImageLineProfile/P=(%d) srcWave=%s," +\
			"xWave=xTrace, yWave=yTrace, width = %g\nDisplay/K=1 W_ImageLineProfile vs W_LineProfileDisplacement. Scaling factor = %g." + \
			"", wavenameStr, ImagePathname, red, green, blue, C1x, C1y, C2x, C2y, C1x, C2x, C1y, C2y, selectedLayer, ImagePathname, 2*profileWidth, scalingFactor
			Note savedfr:$saveWaveNameStr, recreateDrawStr
			break
	endswitch
	return 0
End

/// @function SaveDefaultSettings
/// @brief Save default settings.
/// @details
/// Dispatches the relevant Igor control event and ignores unsupported event codes.
/// @param B_Struct Igor action structure describing the control or window event.
/// @returns Zero after completing the operation.
static Function SaveDefaultSettings(STRUCT WMButtonAction &B_Struct): ButtonControl

	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			DFREF dfr  = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(B_Struct.win, "", "ATH_LineProfRootDF"))
			DFREF dfr0 = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:LineProfiles:DefaultSettings")
			NVAR/Z C1x = dfr:gATH_C1x, C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
			NVAR/Z profileWidth = dfr:gATH_profileWidth
			NVAR/Z C1x0 = dfr0:gATH_C1x0, C1y0 = dfr0:gATH_C1y0, C2x0 = dfr0:gATH_C2x0, C2y0 = dfr0:gATH_C2y0
			NVAR/Z profileWidth0 = dfr0:gATH_profileWidth0
			string msg = "Overwite the default cursor positions and profile linewidth?"
			DoAlert/T="MAXPEEM would like to ask you" 1, msg
			if(V_flag == 1)
				C1x0 = C1x
				C1y0 = C1y
				C2x0 = C2x
				C2y0 = C2y
				profileWidth0 = profileWidth
			endif
			break
	endswitch
End

/// @function SetLineProfileScale
/// @brief Set the line-profile scale from a user-entered cursor distance.
/// @details
/// Converts the entered physical distance to a per-point scaling factor. A value of zero restores nominal image scaling; anisotropic image pixels disable custom scaling.
/// @param B_Struct Igor button-action structure describing the event and panel window.
/// @returns Zero after updating the scale, one if the prompt is cancelled, or -1 for anisotropic image pixels.
static Function SetLineProfileScale(STRUCT WMButtonAction &B_Struct): ButtonControl
	
	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			DFREF dfr  = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(B_Struct.win, "", "ATH_LineProfRootDF"))
			NVAR/SDFR=dfr/Z gATH_scalingFactor
			variable scalebuffer
			Prompt scalebuffer, "Enter cursors distace as scale (0 for nominal scale)"
			string msg = "Enter a value to scale the line profiles based on the current cursor positions."
			msg += "Set the value 0 to use the nominal image scale. Negative values are not allowed for the scaling factor."
			msg += "Move a cursor to update the scale in graph"
			DoPrompt/HELP=msg "Scale line profile", scalebuffer
			if(V_flag)
				return 1
			endif
			if(scalebuffer > 0)
			   	WAVE wRef = dfr:W_LineProfileDisplacement
			   	SVAR/Z/SDFR=dfr gATH_ImagePathname
			   	WAVE imgWaveRef = $gATH_ImagePathname
			   	// DimDelta(imgWaveRef,0)!=DimDelta(imgWaveRef,1) fails in some cases even printed values look the same (rounding issues)
			   	if(abs(DimDelta(imgWaveRef,0) - DimDelta(imgWaveRef,1)) > 1e-10) 
				   	gATH_scalingFactor = 0 // Leave nominal scale
			   		Button ScaleLineProfile, fcolor=(65535,0,0), disable = 2
			   		return -1
			   	endif
			   	gATH_scalingFactor = scalebuffer / numpnts(wRef) / DimDelta(imgWaveRef,0)
				Button ScaleLineProfile win=$B_Struct.win, fcolor=(0,65535,0)
			else
				gATH_scalingFactor = 0 // Leave nominal scale
				Button ScaleLineProfile win=$B_Struct.win, fcolor=(65535,0,0)
			endif
			break
	endswitch
	return 0
End

/// @function RestoreDefaultSettings
/// @brief Restore default settings.
/// @details
/// Dispatches the relevant Igor control event and ignores unsupported event codes.
/// @param B_Struct Igor action structure describing the control or window event.
/// @returns Zero after completing the operation.
static Function RestoreDefaultSettings(STRUCT WMButtonAction &B_Struct): ButtonControl

	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			DFREF dfr  = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(B_Struct.win, "", "ATH_LineProfRootDF"))
			DFREF dfr0 = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:LineProfiles:DefaultSettings")
			SVAR/Z WindowNameStr = dfr:gATH_WindowNameStr
			NVAR/Z C1x = dfr:gATH_C1x, C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
			NVAR/Z profileWidth = dfr:gATH_profileWidth, updateCursorsPositions = dfr:gATH_updateCursorsPositions
			NVAR/Z C1x0 = dfr0:gATH_C1x0, C1y0 = dfr0:gATH_C1y0, C2x0 = dfr0:gATH_C2x0, C2y0 = dfr0:gATH_C2y0
			NVAR/Z profileWidth0 = dfr0:gATH_profileWidth0
			C1x = C1x0
			C1y = C1y0
			C2x = C2x0
			C2y = C2y0
			profileWidth = profileWidth0
			updateCursorsPositions = 1
			DoWindow/F $WindowNameStr
			break
	endswitch
End

/// @function ShowProfileWidth
/// @brief Show profile width.
/// @details
/// We have to find the vertices of the polygon representing.
/// @param B_Struct Igor action structure describing the control or window event.
/// @returns Zero after completing the operation.
static Function ShowProfileWidth(STRUCT WMButtonAction &B_Struct): ButtonControl
	/// We have to find the vertices of the polygon representing
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(B_Struct.win, "", "ATH_LineProfRootDF"))
	SVAR/Z WindowNameStr= dfr:gATH_WindowNameStr
	switch(B_Struct.eventCode)	// numeric switch
		case 1:	// "mouse down"
			SetDrawLayer/W=$WindowNameStr ProgFront
			DrawAction/W=$WindowNameStr getgroup = lineProfileWidth
			if(!V_flag)
				NVAR/Z C1x = dfr:gATH_C1x,C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
				NVAR/Z width = dfr:gATH_profileWidth, dx = dfr:gATH_dx, dy = dfr:gATH_dy
				ATH_LineProfile#DrawLineProfileRectangle(C1x, C1y,C2x, C2y, dx, dy, width, WindowNameStr)
			endif
			break
	endswitch
End

/// @function CheckboxPlotProfile
/// @brief Handle the plot-profile checkbox action.
/// @param cb Igor action structure describing the control or window event.
/// @returns Igor callback status; nonzero indicates that the event was handled.
static Function CheckboxPlotProfile(STRUCT WMCheckboxAction& cb) : CheckBoxControl

	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(cb.win, "", "ATH_LineProfRootDF"))
	NVAR/Z PlotSwitch = dfr:gATH_PlotSwitch
	switch(cb.checked)
		case 1:		// Mouse up
			PlotSwitch = 1
			break
		case 0:
			PlotSwitch = 0
			break
	endswitch
	return 0
End

/// @function ProfileLayer3D
/// @brief Profile layer 3D.
/// @param cb Igor action structure describing the control or window event.
/// @returns One when the requested condition or operation succeeds; otherwise zero.
static Function ProfileLayer3D(STRUCT WMCheckboxAction& cb) : CheckBoxControl
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(cb.win, "", "ATH_LineProfRootDF"))
	NVAR/Z selectedLayer = dfr:gATH_selectedLayer
	NVAR/Z updateSelectedLayer = dfr:gATH_updateSelectedLayer
	SVAR/Z WindowNameStr = dfr:gATH_WindowNameStr
	if(DataFolderExists("root:Packages:ATH_DataFolder:W3DImageSlider:" + WindowNameStr))
		NVAR/Z glayer = root:Packages:ATH_DataFolder:W3DImageSlider:$(WindowNameStr):gLayer
		if(NVAR_Exists(glayer))
			selectedLayer = glayer
		endif
	else
		return 1
	endif
	switch(cb.checked)
		case 1:
			updateSelectedLayer = 1
			break
		case 0:
			updateSelectedLayer = 0
			break
	endswitch
	return 0
End

/// @function CheckboxMarkLines
/// @brief Handle the mark-lines checkbox action.
/// @param cb Igor action structure describing the control or window event.
/// @returns Igor callback status; nonzero indicates that the event was handled.
static Function CheckboxMarkLines(STRUCT WMCheckboxAction& cb) : CheckBoxControl
	
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(cb.win, "", "ATH_LineProfRootDF"))
	NVAR/Z MarkLinesSwitch = dfr:gATH_MarkLinesSwitch
	switch(cb.checked)
		case 1:
			MarkLinesSwitch = 1
			break
		case 0:
			MarkLinesSwitch = 0
			break
	endswitch
	return 0
End

/// @function SetVariableWidth
/// @brief Set variable width.
/// @details
/// Dispatches the relevant Igor control event and ignores unsupported event codes.
/// @param sv Igor action structure describing the control or window event.
/// @returns Igor callback status; nonzero indicates that the event was handled.
static Function SetVariableWidth(STRUCT WMSetVariableAction& sv) : SetVariableControl
	

	switch(sv.eventCode)
		case 6:
			DFREF currdfr = GetDataFolderDFR()
			DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(GetUserData(sv.win, "", "ATH_LineProfRootDF"))
			NVAR/Z C1x = dfr:gATH_C1x,C1y = dfr:gATH_C1y, C2x = dfr:gATH_C2x, C2y = dfr:gATH_C2y
			NVAR/Z width = dfr:gATH_profileWidth, dx = dfr:gATH_dx, dy = dfr:gATH_dy
			NVAR/Z scaleFactor = dfr:gATH_scalingFactor, selectedLayer = dfr:gATH_selectedLayer
			SVAR/Z WindowNameStr = dfr:gATH_WindowNameStr
			SetDataFolder dfr
			Make/O/FREE/N=2 xTrace={C1x, C2x}, yTrace = {C1y, C2y}
			SVAR/Z ImagePathname = dfr:gATH_ImagePathname
			WAVE/Z imgWaveRef = $ImagePathname
			ATH_LineProfile#DeleleLineProfileRectangle(WindowNameStr)
			ATH_LineProfile#DrawLineProfileRectangle(C1x, C1y,C2x, C2y, dx, dy, width, WindowNameStr)
			ImageLineProfile/P=(selectedLayer) srcWave=imgWaveRef, xWave=xTrace, yWave=yTrace, width = 2*width
	   		if(scaleFactor)
		   		WAVE W_LineProfileDisplacement
		   		W_LineProfileDisplacement*=scaleFactor
	   		endif			
			break
	endswitch
	SetDataFolder currdfr
	return 0
End

/// @function DrawLineProfileRectangle
/// @brief Draw the polygon representing a line profile's sampling width.
/// @param C1x X coordinate of the profile's first endpoint.
/// @param C1y Y coordinate of the profile's first endpoint.
/// @param C2x X coordinate of the profile's second endpoint.
/// @param C2y Y coordinate of the profile's second endpoint.
/// @param dx Horizontal pixel size.
/// @param dy Vertical pixel size.
/// @param width Half-width of the sampled line profile in pixels.
/// @param grfName Name of the graph window.
/// @returns Zero after drawing the sampling-width polygon.
static Function DrawLineProfileRectangle(variable C1x,variable C1y,variable C2x, variable C2y, 
							 variable dx, variable dy, variable width, string grfName)

	variable x1, x2, x3, x4, y1, y2, y3, y4, xs, ys
	variable slope = ATH_Geometry#SlopePerpendicularToLineSegment(C1x, C1y, C2x, C2y)
	if(slope == 0)
		x1 = C1x
		x2 = C1x
		x3 = C2x
		x4 = C2x
		y1 = C1y +  width * dy
		y2 = C1y -  width * dy
		y3 = C2y -  width * dy
		y4 = C2y +  width * dy
	elseif(slope == inf)
		y1 = C1y
		y2 = C1y
		y3 = C2y
		y4 = C2y
		x1 = C1x +  width * dx
		x2 = C1x -  width * dx
		x3 = C2x -  width * dx
		x4 = C2x +  width * dx
	else
		[xs, ys] = ATH_Geometry#GetVerticesPerpendicularToLine(width * dx, slope)
		x1 = C1x + xs
		x2 = C1x - xs
		x3 = C2x - xs
		x4 = C2x + xs
		y1 = C1y + ys
		y2 = C1y - ys
		y3 = C2y - ys
		y4 = C2y + ys
	endif
	SetDrawLayer/W=$grfName ProgFront
	SetDrawEnv/W=$grfName gstart,gname= lineProfileWidth
	SetDrawEnv/W=$grfName linefgc = (65535,16385,16385,32767), fillbgc= (65535,16385,16385,32767), fillpat = -1, linethick = 0, xcoord = top, ycoord = left
	DrawPoly/W=$grfName x1, y1, 1, 1, {x1, y1, x2, y2, x3, y3, x4, y4}
	SetDrawEnv/W=$grfName gstop
End

/// @function DeleleLineProfileRectangle
/// @brief Delete the rectangle marking the line-profile width.
/// @param grfName Name of the graph window.
/// @returns Zero after completing the operation.
static Function DeleleLineProfileRectangle(string grfName)
	SetDrawLayer/W=$grfName ProgFront
	DrawAction/W=$grfName getgroup = lineProfileWidth
	DrawAction/W=$grfName delete = V_startPos, V_endPos
End
