#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma IgorVersion  = 9
#pragma ModuleName = ATH_Geometry
#pragma version = 1.01
// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //

/// @module ATH_Geometry
/// @brief Module ATH_Geometry.
/// @details
/// This module belongs to the ATH Igor Pro toolkit and contains procedures
/// related to ATH Geometry functionality.
/// @function GetSinglePointWithDistanceFromLine
/// @brief Calculate a point at a signed distance along a line through a reference point.
/// @param x1 Second x coordinate.
/// @param y1 Second y coordinate.
/// @param s Slope of the line along which to offset the point.
/// @param d Signed distance from the reference point.
/// @returns The calculated x and y coordinates.
static Function [variable x0, variable y0] GetSinglePointWithDistanceFromLine(variable x1, variable y1, variable s, variable d)
	/// Return the coordinates of a point with distance d from line passing from A(x1, y1) with slope s.
	/// Use positive or *negative* distance to get a point on either side of A.
	
	x0 = x1 - d * s / sqrt(s^2 + 1)
	y0 = y1 + 1/s * (x1 - x0)
	return [x0, y0]
End

/// @function GetBothPointsWithDistanceFromLine
/// @brief Calculate the two points separated by a requested distance along a line.
/// @details
/// The returned points lie on opposite sides of the reference point and are separated by `d`.
/// @param x1 Second x coordinate.
/// @param y1 Second y coordinate.
/// @param s Slope of the line on which the returned points lie.
/// @param d Distance separating the two returned points.
/// @returns The x and y coordinates of both calculated points.
static Function [variable xp0, variable yp0, variable xp1, variable yp1 ] GetBothPointsWithDistanceFromLine(variable x1, 
																		  variable y1, variable s, variable d)
	/// Return the coordinates of points with distance d from a line passing from A(x1, y1) with slope s.
	/// Points are on either side of of A.
	if(s == 0)
		xp0 = x1 - d/2
		xp1 = x1 + d/2
		yp0 = y1
		yp1 = y1
	elseif(numtype(s) == 1)
		xp0 = x1
		xp1 = x1
		yp0 = y1 - d/2
		yp1 = y1 + d/2
	else
		xp0 = x1 - d * s / sqrt(s^2 + 1)
		xp1 = x1 + d * s / sqrt(s^2 + 1)
		yp0 = y1 + 1/s * (x1 - xp0)
		yp1 = y1 + 1/s * (x1 - xp1)
	endif
	return [xp0, yp0, xp1, yp1]
End

/// @function SlopePerpendicularToLineSegment
/// @brief Calculate slope perpendicular to line segment.
/// @details
/// Return the slope of a line perpendicular to the line segment defined by (x1, y1) and (x2, y2).
/// @param x1 Second x coordinate or range bound.
/// @param y1 Second y coordinate or range bound.
/// @param x2 Second point's x coordinate.
/// @param y2 Second point's y coordinate.
/// @returns The calculated slope perpendicular to line segment.
static Function SlopePerpendicularToLineSegment(variable x1, variable y1, variable x2, variable y2)
	// Return the slope of a line perpendicular to the line segment defined by (x1, y1) and (x2, y2)
	if (y1 == y2)
		return 0
	elseif (x1 == x2)
		return inf
	else
		return -(x2 - x1)/(y2 - y1)
	endif
End

/// @function GetVerticesPerpendicularToLine
/// @brief Calculate the x and y offsets from a circle center to a line intersection.
/// @details
/// The offsets are the nonnegative x component and signed y component for a line through the origin
/// intersecting a circle of the requested radius.
/// @param radius Radius of the circle.
/// @param slope Slope of the line through the circle center.
/// @returns The x and y offsets from the circle center.
static Function [variable xshift, variable yshift] GetVerticesPerpendicularToLine(variable radius, variable slope)
	// Return the part of the solution of an intersection between a circle of radius = radius
	// with a line with slope = slope. If the center has coordinates (x0, y0) the two point that
	// the line intersects the cicle have x =  x0 ± sqrt(radius^2 / (1 + slope^2)) and 
	// y = slope * sqrt(radius^2 / (1 + slope^2)). 
	// The funtion returns only the second terms.
	 xshift = sqrt(radius^2 / (1 + slope^2))
	 yshift = slope * sqrt(radius^2 / (1 + slope^2))
	 return [xshift, yshift]
End

/// @function SymmetricLineShrink
/// @brief Scale a line segment about its midpoint.
/// @details
/// A factor below one shortens the segment and a factor above one lengthens it without moving its midpoint.
/// @param x1 Second x coordinate.
/// @param y1 Second y coordinate.
/// @param x2 Second endpoint's x coordinate.
/// @param y2 Second endpoint's y coordinate.
/// @param Sfactor Scale factor applied to the segment length about its midpoint.
/// @returns The two endpoints of the scaled line segment.
static Function [variable xn1, variable yn1, variable xn2, variable yn2] SymmetricLineShrink(variable x1, variable y1, 
																		  variable x2, variable y2, variable Sfactor)
	/// Returns the points (xn1, yn1) and (xn2, yn2) that define a line segnemt with
	/// length Sfactor times the length of the line defined by (x1, y1) and (x2, y2).
	/// The center of both line segments is fixed.
	
	variable lineLength = sqrt((x2 - x1)^2 + (y2 - y1)^2) // diameter of the circle
	variable xc = (x1 + x2) / 2,  yc = (y1 + y2) / 2 // center of circle
	variable slope = (y2 - y1) / (x2 - x1) // Slope of line passing from (xc, yc)

	if (slope == inf)
		xn1 = x1
		xn2 = x2
		yn1 = yc - (Sfactor * lineLength) / 2 
		yn2 = yc + (Sfactor * lineLength) / 2
	else
		xn1 = xc - (Sfactor * lineLength) / (2 * sqrt(1 + slope^2))
		xn2 = xc + (Sfactor * lineLength) / (2  * sqrt(1 + slope^2))
		yn1 = yc - slope * (Sfactor * lineLength) / (2  * sqrt(1 + slope^2))
		yn2 = yc + slope * (Sfactor * lineLength) / (2 * sqrt(1 + slope^2))
	endif
	return [xn1, yn1, xn2, yn2]
End

// TODO: Test and uncomment 
//Function [variable xn, variable yn]  ATH_GetAntipodalPoint(variable x1, variable y1, variable x0, variable y0, int solution)

/// @function GetAntipodalPoint
/// @brief Return antipodal point.
/// @details
/// Returns the antipodal point (xn, yn) of (x1, x2) of a circle with center (x0, y0) return [xn, yn].
/// @param x1 Second x coordinate or range bound.
/// @param y1 Second y coordinate or range bound.
/// @param x0 First x coordinate or range bound.
/// @param y0 First y coordinate or range bound.
/// @returns Zero after completing the operation.
static Function GetAntipodalPoint(variable x1, variable y1, variable x0, variable y0)

	/// Returns the antipodal point (xn, yn) of (x1, x2) of a circle with center (x0, y0)
	
	variable radius = sqrt((x1 - x0)^2 + (y1 - y0)^2) // radius of the circle
	variable slope = (y1 - y0) / (x1 - x0) // slope of line passing through (x0, y0) and (x1, y1)
	variable xn, yn
	if (slope == inf)
		xn = x1
		yn = y0 + radius / 2
		if(yn == y1)
			yn = y0 - radius / 2
		endif
	else
		xn = x0 + radius / sqrt(1 + slope^2)
		yn = y0 + (radius * slope) / sqrt(1 + slope^2)
		if(xn == x1)
			print "Have to change sign for xn"
			xn = x0 - radius / sqrt(1 + slope^2)
		endif
		if(yn == y1)
						print "Have to change sign for yn"
			yn = y0 - (radius * slope) / sqrt(1 + slope^2)
		endif
	endif
	print xn, yn
	//return [xn, yn]
End

/// @function LineEquationFromTwoPoints
/// @brief Calculate slope and intercept for the line through two points.
/// @param x0 First x coordinate.
/// @param y0 First y coordinate.
/// @param x1 Second x coordinate.
/// @param y1 Second y coordinate.
/// @returns The line slope and y intercept; a vertical line returns an infinite slope and zero intercept.
static Function [variable slope, variable shift] LineEquationFromTwoPoints(variable x0,
												 variable y0, variable x1, variable y1)
	/// Returns A, B for y = A x + B passing through A(x0, y0), B(x1, y1)
	/// Note: Result w.r.t a standard cartesian system.
	slope = (y1 - y0) /(x1 - x0)
		
	if (x1 == x0)
		return [Inf, 0]
	endif
	shift = y0 - slope * x0
	return [slope, shift]
End

/// @function LineCoefficientsFromCursors
/// @brief Line coefficients from cursors.
/// @details
/// Get a WAVE with the coefficients of a line defined by csr0 & csr1. N.B: Wave scaling is taken into
/// account here! Use poly function to make the polynomial.
/// @param csr0 Name or index of the first cursor.
/// @param csr1 Name or index of the second cursor.
/// @param free (optional) If nonzero, create a free wave rather than a data-folder wave.
/// @param grfName (optional) Name of the graph window.
/// @returns Reference to the result wave; a null reference indicates failure where supported.
static Function/WAVE LineCoefficientsFromCursors(string csr0, string csr1, [int free, string grfName])
	//
	// Get a WAVE with the coefficients of a line defined by csr0 & csr1.
	// N.B: Wave scaling is taken into account here!
	// Use poly function to make the polynomial
	//
	
	grfName = SelectString(ParamIsDefault(grfName) ? 0: 1, WinName(0, 1, 1), grfName)
	free = ParamIsDefault(free) ? 0 : free
	
	variable x0 = hcsr($csr0, grfName)
	variable y0 = vcsr($csr0, grfName)
	variable x1 = hcsr($csr1, grfName)
	variable y1 = vcsr($csr1, grfName)
	
	if(free)
		Make/FREE/N=2/D wRefFREE
	else
		DFREF cdfr = GetDataFolderDFR()
		string waveNameStr = CreateDataObjectName(cdfr,"ath_lineCoefffW", 1, 0, 1)	
		Make/O/D/N=2 $waveNameStr
		WAVE wRefFREE = $waveNameStr
		string noteStr = "Coefficients from " + grfName + " at (" + num2str(x0) + "," + num2str(y0) + ")"
		noteStr += " and (" + num2str(x1) + "," + num2str(y1) + ").\n"
		Note $waveNameStr, noteStr
	endif
		
	variable slope = (y1 - y0) /(x1 - x0)
	
	if (x1 == x0)
		wRefFREE[0] = inf
		wRefFREE[1] = x0
		return wRefFREE
	endif
	variable shift = y0 - slope * x0
	wRefFREE[0] = shift
	wRefFREE[1] = slope
	return wRefFREE
End

/// @function GetLineFromCursors
/// @brief Return line from cursors.
/// @details
/// Get a WAVE with the coefficients of a line defined by csr0 & csr1. N.B: Wave scaling is taken into
/// account here! Use poly function to make the polynomial.
/// @param csr0 Name or index of the first cursor.
/// @param csr1 Name or index of the second cursor.
/// @param free (optional) If nonzero, create a free wave rather than a data-folder wave.
/// @param grfName (optional) Name of the graph window.
/// @returns Reference to the result wave; a null reference indicates failure where supported.
static Function/WAVE GetLineFromCursors(string csr0, string csr1, [int free, string grfName])
	//
	// Get a WAVE with the coefficients of a line defined by csr0 & csr1.
	// N.B: Wave scaling is taken into account here!
	// Use poly function to make the polynomial
	//
	
	grfName = SelectString(ParamIsDefault(grfName) ? 0: 1, WinName(0, 1, 1), grfName)
	free = ParamIsDefault(free) ? 0 : free
	WAVE wRef = ATH_Traces#TopTraceToWaveRef(grfName=grfName)

	variable x0 = hcsr($csr0, grfName)
	variable y0 = vcsr($csr0, grfName)
	variable x1 = hcsr($csr1, grfName)
	variable y1 = vcsr($csr1, grfName)
	
	WAVE coeffW = ATH_Geometry#LineCoefficientsFromCursors(csr0, csr1, free = 1, grfName = grfName)
	if(free)
		Duplicate/FREE wRef, wRefFREE
		wRefFREE = poly(coeffW, x)
		return wRefFREE
	else
		string lineWaveName = NameOfWave(wRef) + "_fitline"
		Duplicate/O wRef, $lineWaveName
		WAVE lineW = $lineWaveName
		lineW = poly(coeffW, x)
		string noteStr = "Coefficients from " + grfName + " at (" + num2str(x0) + "," + num2str(y0) + ")"
		noteStr += " and (" + num2str(x1) + "," + num2str(y1) + ").\n"
		noteStr += "K0=" + num2str(coeffW[0])+", K1="+num2str(coeffW[1])+".\n"
		return lineW
	endif
End

/// @function XYWavesOfLineFromTwoPoints
/// @brief Create coordinate waves sampling the segment between two points.
/// @param x0 First x coordinate.
/// @param y0 First y coordinate.
/// @param x1 Second x coordinate.
/// @param y1 Second y coordinate.
/// @param npts Number of output points or LOESS neighborhood size, as applicable.
/// @returns Free waves containing the sampled x and y coordinates.
static Function [WAVE wx, WAVE wy] XYWavesOfLineFromTwoPoints(variable x0, 
								   variable y0, variable x1, variable y1, variable npts)
	//
	Make/FREE/N=(npts) wx, wy
	SetScale/I x, x0, x1, wx
	SetScale/I x, y0, y1, wy	
	variable slope, shift
	[slope, shift] = LineEquationFromTwoPoints(x0, y0, x1, y1)
	if(x0 == x1)
		wx = x0
		wy = x
	elseif(y0 == y1) // !!!Note: if y0 == y1 SetScale/I x, y0, y1, wy => SetScale/P x, 0, 1, wy
		wx = x
		wy = y0
	else // simple and works with any axes
		wx = x
		wy = x
	endif
	
	return [wx, wy]
End

static Function [variable p0, variable p1, variable q0, 
		  variable q1] GetCenterNonRotatedImageBoundaries(WAVE wRef, variable value)
	/// Function returns the boundaries of a region that is surrounded/bounded 
	/// by an area with value = value. Works with 2D waves and assumes a centered
	/// rectangular non-rotated image!
	
	variable wDims = WaveDims(wRef)
	if(wDims != 2)
		return 
	endif
		
	variable idxPMax = DimSize(wRef, 0)
	variable idxQMax = DimSize(wRef, 1), i, j, bypass = 1
	
	variable midQ = DimSize(wRef, 1)/2
	for(i = 1; i < idxPMax; i+=2)
		if(wRef[i-1][midQ] == value && wRef[i][midQ] == value)
			continue
		elseif(bypass)
			p0 = i
			bypass = 0
		else
			j = i
			p1 = j - 1
		endif
	endfor
	bypass = 1 // reset bypass switch
	variable midP = DimSize(wRef, 0)/2
	for(i = 1; i < idxQMax; i+=2)
		if(wRef[midP][i-1] == value && wRef[midP][i] == value)
			continue
		elseif(bypass)
			q0 = i
			bypass = 0
		else
			j = i
			q1 = j - 1
		endif
	endfor
	return [p0, p1, q0, q1]
End
