#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma IgorVersion = 9
#pragma version = 1.01

// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //

/// @module ATH_IgorHook
/// @brief Module ATH_IgorHook.
/// @details
/// This module belongs to the ATH Igor Pro toolkit and contains procedures
/// related to ATH IgorHook functionality.

/// @function BeforeFileOpenHook
/// @brief Handle before file open hook events.
/// @details
/// ATH_WAVELoadSingleDATFile(fileToOpen, "", autoscale = 1). Added on the 17.03.2023 to deal with a
/// corrupted file. AfterWindowCreatedHook - Used in Spaces to assign tags to new windows.
/// @param refNum Igor file reference number.
/// @param fileNameStr File name supplied by Igor.
/// @param pathNameStr Path name str.
/// @param fileTypeStr File-type identifier.
/// @param fileCreatorStr File-creator identifier.
/// @param fileKind Igor file-kind code.
/// @returns Igor callback status; nonzero indicates that the event was handled.
Function BeforeFileOpenHook(variable refNum, string fileNameStr, string pathNameStr, string fileTypeStr, string fileCreatorStr, variable fileKind)

    PathInfo $pathNameStr
    string fileToOpen = S_path + fileNameStr
    if(StringMatch(fileNameStr, "*.dat") && fileKind == 7) // Igor treats .dat files is a General text (fileKind == 7)
        try	
        	// ATH_WAVELoadSingleDATFile(fileToOpen, "", autoscale = 1)
        	WAVE wIn = ATH_Uview#WAVELoadSingleDATFile(fileToOpen, "", autoscale = 1)
        	AbortOnRTE
        catch
        	// Added on the 17.03.2023 to deal with a corrupted file. 
        	print "!",fileNameStr, "metadataReadError."
        	variable err = GetRTError(1) // Clears the error
        	//WAVE wIn = ATH_Uview#WAVELoadSingleCorruptedDATFile(fileToOpen, "")
        	//Abort // Removed to stop the "Encoding window" from popping all the time.
        endtry
        ATH_Display#NewImg(wIn)
        return 1
    endif
    return 0
End

// AfterWindowCreatedHook - Used in Spaces to assign tags to new windows

/// @function AfterWindowCreatedHook
/// @brief Handle after window created hook events.
/// @details
/// Every window created is assigned to the active Space if the panel is there. Sanitize names.
/// @param windowNameStr Window name str.
/// @param winTypevar Igor window-type code.
/// @returns Igor callback status; nonzero indicates that the event was handled.
Function AfterWindowCreatedHook(string windowNameStr, variable winTypevar)
	// Every window created is assigned to the active Space if the panel is there
	if(WinType("ATH_SpacesPanel"))
		DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:Spaces")
		WAVE/Z/T/SDFR=dfr ATHSpacesTW
		NVAR/SDFR=dfr gSelectedSpace
		windowNameStr = WinName(0, 87, 1) // Window is created, visible only
		if(DimSize(ATHSpacesTW,0) && cmpstr(windowNameStr,"ATH_SpacesPanel")) // We have to have at least one space
			//Sanitize names
			if(GrepString(ATHSpacesTW[gSelectedSpace], "^\*"))
				SetWindow $windowNameStr userdata(ATH_SpacesTag) = ATH_Spaces#SanitiseATHSpaceName(ATHSpacesTW[gSelectedSpace])
			else
				SetWindow $windowNameStr userdata(ATH_SpacesTag) = ATHSpacesTW[gSelectedSpace]
			endif
		endif
	endif
	return 0 // Ignored
End

/// @function AfterCompiledHook
/// @brief Handle after compiled hook events.
/// @returns Igor callback status; nonzero indicates that the event was handled.
Function AfterCompiledHook()
    CreateBrowser
	ModifyBrowser appendUserButton={$"Calc XMCD", "Execute/P/Q \"ATH_Launch#BrowserActionDoXMDC()\""}
	variable err=GetRTError(1)
	if (err != 0)
		//print "Error in AfterCompiledHook() Data Browser was not active, to add custom butttons "\
		//+"run ATH_Launch#BrowserActionDoXMDC() & ATH_Launch#BrowserActionMakeStack()"
		return -1
	endif	
	ModifyBrowser appendUserButton={$"Stack Waves", "Execute/P/Q \"ATH_Launch#BrowserActionMakeStack()\""}
	ModifyBrowser appendUserButton={$"Display Image", "Execute/P/Q \"ATH_Launch#BrowserActionNewImg()\""}	
	ModifyBrowser echoCommands=0
	return 0
End

