#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma IgorVersion = 9.05
#pragma ModuleName = ATH_Warp
#pragma version = 1.0

// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //

static constant kCBOFFSET = 55 // Warp panel

static Function WarpControl()

	string destGraphStr = WinName(0, 1, 1) // Graph with ControlBar	
	string dfrStr = "root:Packages:ATH_DataFolder:Warping:" + destGraphStr
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(dfrStr)

	WAVE destW = ATH_Graph#TopGraphToWaveRef()	

	DoWindow/T $destGraphStr, ("Destination: "+  NameOfWave(destW))

	SetWindow $destGraphStr userdata(destGraphStr) = destGraphStr
	SetWindow $destGraphStr userdata(WarpDFStr) = dfrStr	

	
	// Set global variables
	variable/G dfr:lastIndex = 0
	variable/G dfr:setGrid = 0

	//variable/G dfr:flag = 0
	variable/G dfr:gATH_driftStep = 1
	variable/G dfr:gATH_dx = 0	
	variable/G dfr:gATH_dy = 0	
		
	variable/G dfr:gATH_gridRows = 2 // minimum allowed
	variable/G dfr:gATH_gridCols = 2
	// Save original scaling
	variable/G dfr:dx0 = Dimoffset(destw,0)
	variable/G dfr:dy0 = Dimoffset(destw,1)
	variable/G dfr:ddx = DimDelta(destw,0)
	variable/G dfr:ddy = DimDelta(destw,1)		
	// Source image
	variable/G dfr:sx0 = 0
	variable/G dfr:sy0 = 0
	variable/G dfr:sdx = 0
	variable/G dfr:sdy = 0

	string/G dfr:gATH_srcStr = ""
	string/G dfr:gATH_destStr = GetWavesDataFolder(destW,2)
	string/G dfr:gATH_srcWinStr = ""
	NVAR/SDFR=dfr gATH_gridRows, gATH_gridCols, dx0, dy0, ddx, ddy
	SetScale/P x, 0, 1, destW; 	SetScale/P y, 0, 1, destW // Change scale

	// Make a copy of the original wave
	Duplicate destW, dfr:backUpWave, dfr:ath_diff
		
	if(WaveType(destW) & 0x10) // If WORD (int16)
		Redimension/S destW
	endif
		
	variable pntConv = (CmpStr(IgorInfo(2), "Windows") == 0 && ScreenResolution >= 96)? 1 : 72/ScreenResolution
	variable lCBOFFSET 
	ControlInfo kwControlBar
	lCBOFFSET = V_height
	ControlBar/W=$destGraphStr lCBOFFSET + kCBOFFSET	

	SetVariable svRows,win=$destGraphStr,pos={90*pntConv,(5+lCBOFFSET)*pntConv},size={90*pntConv,20*pntConv},title="Rows"
	SetVariable svRows,win=$destGraphStr,value=gATH_gridRows,fSize=14,limits={2,5,1},live=1
	SetVariable svCols,win=$destGraphStr,pos={90*pntConv,(28+lCBOFFSET)*pntConv},size={90*pntConv,20.00*pntConv},title="Cols"
	SetVariable svCols,win=$destGraphStr,value=gATH_gridCols,fSize=14,limits={2,5,1},live=1
	
	Button SelectSourceImageWarpB,win=$destGraphStr,title="Ref ?",pos={5*pntConv,(7+lCBOFFSET)*pntConv},size={75*pntConv,40*pntConv},help={"Select source image"}, fColor=(65535,0,0)	
	Button SetGridsWarpB,win=$destGraphStr,title="(Re)Set grid",pos={190*pntConv,(5+lCBOFFSET)*pntConv},size={90*pntConv,20*pntConv},help={"Set or reset grids on source/destination images"}, valueColor=(1,12815,52428)	
	Button WarpImageWarpB,win=$destGraphStr,title="Warp",pos={190*pntConv,(28+lCBOFFSET)*pntConv},size={90*pntConv,20*pntConv},help={"Warped destination image"}, valueColor=(1,12815,52428)	
	Button RestoreImgsWarpB,win=$destGraphStr,title="Restore",size={70*pntConv,20*pntConv},pos={295*pntConv,(28+lCBOFFSET)*pntConv},valueColor=(0,0,0)
	Button DoneWarpB,win=$destGraphStr,title="Done",fColor=(49163,65535,32768),size={44*pntConv,40*pntConv},pos={375*pntConv,(8+lCBOFFSET)*pntConv},fColor=(32768,54615,65535),valueColor=(0,0,0)

	ModifyControlList ControlNameList(destGraphStr,";","*WarpB"), proc=ATH_Warp#WarpButton, fsize=14*pntConv, win=$destGraphStr

	PopupMenu methodL,win=$destGraphStr,value="smooth;linear;fast", pos={295*pntConv,(5+lCBOFFSET)*pntConv},size={70*pntConv,20*pntConv},help={"Select interpolation method"}
	PopupMenu methodL,fsize=14*pntConv,valueColor=(1,12815,52428)

	SetWindow $destGraphStr hook(WarpGridHook) = ATH_Warp#WarpGridHook
	
	DoWindow/F $destGraphStr
	return 0
End

static Function WarpGridHook(STRUCT WMWinHookStruct &s)

	variable hookResult = 0, curX,curY,flags, px,py
	DFREF dfr = $GetUserData(s.winName, "", "WarpDFStr")
	NVAR/Z/SDFR=dfr setGrid, lastIndex, dx0,dy0,ddx,ddy,sx0,sy0,sdx,sdy, flag // test
	SVAR/Z/SDFR=dfr gATH_srcWinStr, gATH_srcWStr, gATH_destStr, gATH_srcWStr
	switch(s.eventCode)
		case 17: // not 2,
			if(!cmpstr(s.winName, gATH_srcWinStr)) // Set Info to the window and kill the other window
				string otherWinStr = GetUserData(s.winName, "", "destGraphStr")
				KillWindow/Z $gATH_srcWinStr
				KillControl/W=$otherWinStr svRows
				KillControl/W=$otherWinStr svCols
				KillControl/W=$otherWinStr SelectSourceImageWarpB
				KillControl/W=$otherWinStr SetGridsWarpB
				KillControl/W=$otherWinStr WarpImageWarpB
				KillControl/W=$otherWinStr methodL
				KillControl/W=$otherWinStr RestoreImgsWarpB
				KillControl/W=$otherWinStr DoneWarpB
				ControlBar/W=$otherWinStr 0
				RemoveFromGraph/W=$otherWinStr/Z yd
				SetWindow $otherWinStr hook(WarpGridHook) = ATH_Warp#WarpGridHook				
			else
				KillWindow/Z $gATH_srcWinStr
				KillWindow/Z $s.winName
			endif
			WAVE/Z srcW = $gATH_srcWStr
			WAVE/Z destW = $gATH_destStr	
			SetScale/P x, dx0, ddx, destW; SetScale/P y, dy0, ddy, destW								
			SetScale/P x, sx0, sdx, srcW; SetScale/P y, sy0, sdy, srcW
			KillDataFolder/Z dfr
			break
		case 3:
			hookResult = 1
			lastIndex = -1
			break
		case 4:
			if((s.eventMod & 1) && setGrid)
				px = s.mouseLoc.h
				py = s.mouseLoc.v
				curX=AxisValFromPixel(s.winName, "top", px)
				curY=AxisValFromPixel(s.winName, "left", py)
				if(!cmpstr(s.WinName, gATH_srcWinStr))
					Wave xw = dfr:xs
					Wave yw = dfr:ys
				else
					Wave xw = dfr:xd
					Wave yw = dfr:yd
				endif
				variable rows = DimSize(xw,0)
				variable row,col
				if(lastIndex>-1)
					row = mod(lastIndex,rows)
					col = trunc(lastIndex/rows)
					yw[row][col] = curY
					xw[row][col] = curX
					//flag = 1 // Test
				else
					string info=TraceFromPixel(px,py,"")
					if(strlen(info)>0)
						lastIndex = NumberByKey("HITPOINT", info , ":")
						row = mod(lastIndex,rows)
						col = trunc(lastIndex/rows)
						yw[row][col] = curY
						xw[row][col] = curX
						//flag = 1 // Test 			
					else
						lastIndex = -1
					endif
				endif
				if(lastIndex>-1)
					hookResult = 1
				endif
			else
				hookResult = 0
			endif
			// Continuous mode by pressing //SHIFT
			if(s.eventMod & 2 && cmpstr(s.winName, gATH_srcWinStr))
				WAVE/Z destW = $gATH_destStr
				WAVE/Z srcW = $gATH_srcWStr
				WAVE/SDFR=dfr xs, ys, xd, yd, backUpWave, ath_diff
				ControlInfo/W=$s.winName methodL
				ImageInterpolate/wm=(4-V_Value)/sgrx=xs/sgry=ys/dgrx=xd/dgry=yd warp backUpWave
				WAVE M_InterpolatedImage
				Duplicate/O M_InterpolatedImage, destW
				ath_diff = srcW - destW
			endif			
			break
		case 5:
			if(flag && cmpstr(s.winName, gATH_srcWinStr))
				WAVE/Z destW = $gATH_destStr
				WAVE/Z srcW = $gATH_srcWStr
				WAVE/SDFR=dfr xs, ys, xd, yd, backUpWave, ath_diff				
				ControlInfo/W=$s.winName methodL
				ImageInterpolate/wm=(4-V_Value)/sgrx=xs/sgry=ys/dgrx=xd/dgry=yd warp backUpWave
				WAVE M_InterpolatedImage
				Duplicate/O M_InterpolatedImage, destW
				ath_diff = srcW-destW
			endif
			flag = 0
			///
			lastIndex = -1
			break
	endswitch


	if(s.specialKeyCode)
		NVAR/SDFR=dfr gATH_driftStep, gATH_dx, gATH_dy
		WAVE/Z destW = $gATH_destStr
		switch(s.specialKeyCode)
			case 100: //left arrow
				gATH_dx -= gATH_driftStep
				ImageInterpolate/APRM={1,0, gATH_dx,0,1,gATH_dy,1,0}/DEST=M_InterpolatedImage Affine2D destW
				Duplicate/O M_InterpolatedImage, destW
				hookResult = 1
				break
			case 101: //right arrow
				gATH_dx += gATH_driftStep
				ImageInterpolate/APRM={1,0, gATH_dx,0,1,gATH_dy,1,0}/DEST=M_InterpolatedImage Affine2D destW
				Duplicate/O M_InterpolatedImage, destW
				hookResult = 1
				break
			case 102: // up arrow
				gATH_dy -= gATH_driftStep
				ImageInterpolate/APRM={1,0,gATH_dx,0,1,gATH_dy,1,0}/DEST=M_InterpolatedImage Affine2D destW
				Duplicate/O M_InterpolatedImage, destW
				hookResult = 1
				break
			case 103: // down arrow
				gATH_dy += gATH_driftStep
				ImageInterpolate/APRM={1,0,gATH_dx,0,1,gATH_dy,1,0}/DEST=M_InterpolatedImage Affine2D destW
				Duplicate/O M_InterpolatedImage, destW
				hookResult = 1
				break
			default:
				break
		endswitch
		if(hookResult)
			// has to be first so wXMCD, do not need rescaling
			ath_diff = srcW-destW
		endif
	endif
	
		
	return hookResult		// 0 if nothing done, else 1
End

static Function WarpButton(STRUCT WMButtonAction &B_Struct)

	if (B_Struct.eventCode != 2)
		return 0
	endif
	DFREF dfr = $GetUserData(B_Struct.win, "", "WarpDFStr")
	NVAR/Z/SDFR=dfr gATH_gridRows, gATH_gridCols, setGrid,  dx0,dy0,ddx,ddy,sx0,sy0,sdx,sdy
	SVAR/Z/SDFR=dfr gATH_srcStr, gATH_destStr, gATH_srcWinStr
	WAVE/Z srcW = $gATH_srcStr
	WAVE/Z destW = $gATH_destStr
	WAVE/Z/SDFR=dfr backupWave
	strswitch (B_Struct.ctrlName)
		case "SelectSourceImageWarpB":
			string buffer0, buffer1
			[buffer0, buffer1] = ATH_Warp#SelectSourceWave(destW,B_Struct.win)
			gATH_srcStr = buffer0
			gATH_srcWinStr = buffer1
			SetWindow $gATH_srcWinStr hook(WarpGridHook) = ATH_Warp#WarpGridHook
			SetWindow $gATH_srcWinStr userdata(WarpDFStr) = GetUserData(B_Struct.win, "", "WarpDFStr")
			break
		case "SetGridsWarpB":
			if(!strlen(gATH_srcStr))
				print "You need to set the reference (source) image"
				return 0
			endif
			DFREF currDFR = GetDataFolderDFR()
			SetDataFolder dfr
			Make/O/D/N=(gATH_gridRows,gATH_gridCols) xs,ys, xd, yd
			variable imagerows = DimSize(destW, 0)
			variable imagecols = DimSize(destW, 1)
			xs=p*imagerows/(gATH_gridRows-1)
			ys=q*imageCols/(gATH_gridCols-1)
			xd=p*imagerows/(gATH_gridRows-1)
			yd=q*imageCols/(gATH_gridCols-1)
			CheckDisplayed/W=$B_Struct.win yd
			variable dx = DimDelta(destW,0)
			variable dy = DimDelta(destW,1)
			if(V_Flag==0)
				AppendToGraph/W=$B_Struct.win /T yd vs xd
			endif
			ModifyGraph/W=$B_Struct.win mode=3,marker=0,msize=5

			CheckDisplayed/W=$gATH_srcWinStr ys
			if(V_Flag==0)
				AppendToGraph/W=$gATH_srcWinStr  /T ys vs xs
			endif
			ModifyGraph/W=$gATH_srcWinStr mode=3,marker=0,msize=5
			SetDataFolder currDFR
			setGrid = 1
			break
		case "WarpImageWarpB":
			if(setGrid)
				WAVE/SDFR=dfr xs, ys, xd, yd, backUpWave
				ControlInfo/W=$B_Struct.win methodL
				ImageInterpolate/wm=(4-V_Value)/sgrx=xs/sgry=ys/dgrx=xd/dgry=yd warp destW
				WAVE M_InterpolatedImage
				Duplicate/O M_InterpolatedImage, destW
				KillWaves M_InterpolatedImage
			endif
			break
		case "RestoreImgsWarpB":
			Duplicate/O dfr:backUpWave, destW
			break
		case "DoneWarpB":
			SetWindow $B_Struct.win hook(WarpGridHook) = $""
			SetWindow $gATH_srcWinStr hook(WarpGridHook) = $""
			RemoveFromGraph/W=$B_Struct.win/Z yd
			RemoveFromGraph/W=$gATH_srcWinStr/Z ys
			KillWindow/Z $gATH_srcWinStr
			KillControl/W=$B_Struct.win svRows
			KillControl/W=$B_Struct.win svCols
			KillControl/W=$B_Struct.win SelectSourceImageWarpB
			KillControl/W=$B_Struct.win SetGridsWarpB
			KillControl/W=$B_Struct.win WarpImageWarpB
			KillControl/W=$B_Struct.win methodL
			KillControl/W=$B_Struct.win RestoreImgsWarpB
			KillControl/W=$B_Struct.win DoneWarpB
			ControlInfo/W=$B_Struct.win kwControlBar
			ControlBar/W=$B_Struct.win V_Height - kCBOFFSET		
			if(WaveExists(srcW))
				SetScale/P x, sx0, sdx, srcW; SetScale/P y, sy0, sdy, srcW	
			endif
			SetScale/P x, dx0, ddx, destW; SetScale/P y, dy0, ddy, destW					
			KillDataFolder/Z dfr				
			break
	endswitch
	return 0
End

static Function [string srcWStr, string srcGraphStr] SelectSourceWave(WAVE destW, string grfName)

	string msg = "Select the source wave for warping..."
	string selectedWavesInBrowserStr = ATH_Dialog#SelectWavesInModalDataBrowser(msg)
	// S_fileName is a carriage-return-separated list of full paths to one or more files.
	srcWStr = StringFromList(0, selectedWavesInBrowserStr)
	if(!strlen(srcWStr)) // User cancelled
		return ["",""]
	endif
	WAVE srcW = $srcWStr
	if(!ATH_WaveOp#WaveDimensionsEqualQ(srcW, destW))
		return ["",""]
	endif
	//Save image scaling
	DFREF dfr = $GetUserData(grfName, "", "WarpDFStr")
	variable/G dfr:sx0 = DimOffset(srcW, 0)
	variable/G dfr:sy0 = DimOffset(srcW, 1)
	variable/G dfr:sdx = DimDelta(srcW,0)
	variable/G dfr:sdy = DimDelta(srcW,1)
	string/G dfr:gATH_srcWStr = srcWStr
	SetScale/P x, 0, 1, srcW; 	SetScale/P y, 0, 1, srcW // Change scale
	Button SelectSourceImageWarpB, fColor=(49163,65535,32768), title="Ref Set", help={srcWStr},win=$grfName
	ATH_Display#NewImg(dfr:ath_diff)
	// Linked 
	ATH_Display#NewImg(srcW)
	srcGraphStr = WinName(0, 1, 1)
	// Linked .
	DoWindow/T $srcGraphStr, ("Source: "+ NameOfWave(srcW))
	return [srcWStr, srcGraphStr]
End

/////////////////////////////////////////////////////////////////////////////////////////////////////
//////Solution of the linear system to calculate the parameters of the affine transformation from the displacement vectors
/////////////////////////////////////////////////////////////////////////////////////////////////////

static Function ResolveTransformationMatrix(WAVE wv1,WAVE wv2)
	
	// calculate the distortion matrix components by solving a linear system of equations
	// wv1 and wv2 are the undistorted and distorted vectors in the form:
	// {x1,y1,x2,y2,x3,y3}, where xn,yn is the n-vector 
	// the components of the undistorted vector wv1 are put into the matrix M_input that defines the linear system 
	                          
	
	Make/O M_input={{wv1[0],0,wv1[2],0,wv1[4],0},{0,wv1[1],0,wv1[3],0,wv1[5]},\
	{0,wv1[0],0,wv1[2],0,wv1[4]},{wv1[1],0,wv1[3],0,wv1[5],0},{1,0,1,0,1,0},{0,1,0,1,0,1}}
	
	MatrixLinearSolve/Z M_input, wv2
	// Solution in M_b
	WAVE M_b
	if(!V_flag || (M_b[0]*M_b[1])==0)
		print "Error "
		return -1
	endif
	WAVE M_b
	WAVE/Z/D W_ParamsOut
	if (!WaveExists(W_ParamsOut))
		Make/D/O/N=22 W_ParamsOut
		SetDimLabel 0,0, dx,W_ParamsOut;SetDimLabel 0,1, dy,W_ParamsOut;SetDimLabel 0,2, dz,W_ParamsOut
		SetDimLabel 0,3, a11,W_ParamsOut;SetDimLabel 0,4, a12,W_ParamsOut;SetDimLabel 0,5, a13,W_ParamsOut
		SetDimLabel 0,6, a21,W_ParamsOut;SetDimLabel 0,7, a22,W_ParamsOut;SetDimLabel 0,8, a23,W_ParamsOut
		SetDimLabel 0,9, a31,W_ParamsOut;SetDimLabel 0,10, a32,W_ParamsOut;SetDimLabel 0,11, a33,W_ParamsOut
		SetDimLabel 0,17, origin_x,W_ParamsOut;SetDimLabel 0,18, origin_y,W_ParamsOut
	else
		WAVE/Z W_ParamsOut
	endif
	W_ParamsOut={M_b[4],M_b[5],0,1/M_b[0],-M_b[3],0,-M_b[2],1/M_b[1],0,0,0,1,0,0,0,0,0,0,0,0,0,0}
	return 0
End